PsychoPy2experiment version="2026.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop02
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine trial
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    TextComponent textStroop
      color [set every repeat] = $fontcolor
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word
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    KeyboardComponent keyStroop
      allowedKeys = 'up','down','left','right'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine Welcome
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        歡迎參加Stroop效應實驗

        感謝您的參與。

        在本實驗中，螢幕中央會依序出現不同的中文字（例如：「紅」、「綠」、「藍」、「黃」）。

        這些中文字會以不同的物理顏色（墨水顏色）顯示。
        您的任務：

        請忽略文字本身的意義，僅針對文字的**「物理顏色」**做出反應。
        反應方式：

        請使用鍵盤上的按鍵來代表您看到的顏色：

            如果您看到的文字顏色是紅色 → 請按 【R】 鍵

            如果您看到的文字顏色是綠色 → 請按 【G】 鍵

            如果您看到的文字顏色是藍色 → 請按 【B】 鍵

            如果您看到的文字顏色是黃色 → 請按 【Y】 鍵

        範例：

        螢幕上出現：紅 (藍色的「紅」字)
        → 您應該按 【B】 鍵 (代表藍色)。

        請在保證正確性的前提下，盡可能快速地做出反應。

        如果您準備好了，請按【空白鍵 (Spacebar)】開始實驗。
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine goodbye
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    TextComponent text_norm_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 感謝您的參與！
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine blank500ms
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    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine stimulus_loader
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    CodeComponent codeLoader
      Code Type = Auto->JS
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      Before Experiment:
        word_list = []
        fontcolor_list = []
      Begin Experiment:
        #save current word and color to the list
        word_list.append(word)
        fontcolor_list.append(fontcolor)
  Routine codeShuffler
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        shuffle(word_list)
        shuffle(fontcolor_list)

        print(word_list)
        print(fontcolor_list)
Flow
  LoopInitiator loaderloop loopType="TrialHandler"
    conditionsFile = simple_stroop_list.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'word': 'RED', 'fontcolor': 'red'},
      {'word': 'GREEN', 'fontcolor': 'green'},
      {'word': 'BLUE', 'fontcolor': 'blue'},
      {'word': 'YELLOW', 'fontcolor': 'yellow'}]
    Routine stimulus_loader
  LoopTerminator loaderloop
  Routine codeShuffler
  Routine Welcome
  Routine blank500ms
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    conditions:
      [{'word': 'RED', 'fontcolor': 'red', 'type': 'congruent', 'correct_key': 'up'},
      {'word': 'GREEN', 'fontcolor': 'green', 'type': 'congruent', 'correct_key': 'right'},
      {'word': 'BLUE', 'fontcolor': 'blue', 'type': 'congruent', 'correct_key': 'down'},
      {'word': 'YELLOW', 'fontcolor': 'yellow', 'type': 'congruent', 'correct_key': 'left'},
      {'word': 'RED', 'fontcolor': 'blue', 'type': 'incongruent', 'correct_key': 'down'},
      {'word': 'GREEN', 'fontcolor': 'yellow', 'type': 'incongruent', 'correct_key': 'left'},
      {'word': 'BLUE', 'fontcolor': 'red', 'type': 'incongruent', 'correct_key': 'up'},
      {'word': 'YELLOW', 'fontcolor': 'green', 'type': 'incongruent', 'correct_key': 'right'}]
    Routine trial
    Routine blank500ms
  LoopTerminator trials
  Routine goodbye
