PsychoPy2experiment version="2026.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop_class-01
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine welcome
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    TextComponent text_norm
      font = Arial, "Microsoft JhengHei", "Noto Sans TC", sans-serif
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        歡迎參加斯特魯普效應實驗 (Stroop Effect Experiment)

        感謝您的參與。

        在本實驗中，螢幕中央會依序出現不同的中文字（例如：「紅」、「綠」、「藍」、「黃」）。

        這些中文字會以不同的物理顏色（墨水顏色）顯示。
        您的任務：

        請忽略文字本身的意義，僅針對文字的**「物理顏色」**做出反應。
        反應方式：

        請使用鍵盤上的按鍵來代表您看到的顏色：

            如果您看到的文字顏色是紅色 → 請按 【r】 鍵

            如果您看到的文字顏色是綠色 → 請按 【g】 鍵

            如果您看到的文字顏色是藍色 → 請按 【b】 鍵

            如果您看到的文字顏色是黃色 → 請按 【y】 鍵

        範例：

        螢幕上出現：紅 (藍色的「紅」字)
        → 您應該按 【b】 鍵 (代表藍色)。

        請在保證正確性的前提下，盡可能快速地做出反應。

        如果您準備好了，請按【空白鍵 (Spacebar)】開始實驗。
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      disabled = True
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine trialStroop
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    TextComponent textStroop
      color [set every repeat] = $colour
      font = Arial, "Microsoft JhengHei", "Noto Sans TC", sans-serif
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','g','b','y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent text_align_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        textStroop.align = 'center'
  Routine blank_random_period
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    TextComponent fix_rand
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
      text = +
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  Routine goodbye
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    TextComponent text_norm_2
      font = Arial, "Microsoft JhengHei", "Noto Sans TC", sans-serif
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        謝謝您的參與！
        請找實驗者解說

        請按空白鍵退出
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_3
      Code Type = Both
      disabled = True
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = loop-stroop-class-01.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'word': 'RED', 'colour': 'red', 'type': 'congruent', 'correct_key': 'r'},
      {'word': 'GREEN', 'colour': 'green', 'type': 'congruent', 'correct_key': 'g'},
      {'word': 'BLUE', 'colour': 'blue', 'type': 'congruent', 'correct_key': 'b'},
      {'word': 'YELLOW', 'colour': 'yellow', 'type': 'congruent', 'correct_key': 'y'},
      {'word': 'RED', 'colour': 'blue', 'type': 'incongruent', 'correct_key': 'b'},
      {'word': 'GREEN', 'colour': 'yellow', 'type': 'incongruent', 'correct_key': 'y'},
      {'word': 'BLUE', 'colour': 'green', 'type': 'incongruent', 'correct_key': 'g'},
      {'word': 'YELLOW', 'colour': 'red', 'type': 'incongruent', 'correct_key': 'r'}]
    Routine trialStroop
    Routine blank_random_period
  LoopTerminator trials
  Routine goodbye
